CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^.*_column_(?P<Column>[0-9]*)_cut_(?P<Cut>[0-9]*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does startwith "FITC")
    Name to assign these images:Well_I
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Mask")
    Name to assign these images:Mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:Well_I
    Name the output image:Masked_I
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Masked_I
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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enabled:False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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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enabled:False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
    Name the output objects:FilteredCells
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.98
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:70
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.20
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:9|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Well_I
    Name the output image:Overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredCells

DisplayDataOnImage:[module_num:10|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enabled:False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
    Display object or image measurements?:Image
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    Measurement to display:Count_FilteredCells
    Select the image on which to display the measurements:Overlay
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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